def model CardiovascularSystem as
  def import using "simple_physiological_units.cellml" for
    unit m2 using unit m2;
    unit m3 using unit m3;
    unit m3_per_s using unit m3_per_s;
    unit m_per_s2 using unit m_per_s2;
    unit m6_per_J using unit m6_per_J;
    unit per_m using unit per_m;
    unit J_per_m3 using unit J_per_m3;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit J_per_s using unit J_per_s;
    unit J_per_m6 using unit J_per_m6;
    unit Js_per_m3 using unit Js_per_m3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit m3_per_Js using unit m3_per_Js;
  enddef;
  def import using "simple_physiological_parameters.cellml" for
    comp parameters using comp parameters;
    comp parameters_heart using comp parameters_heart;
  enddef;

  def comp environment as
    var time: second {pub: out};
    var beta_g: dimensionless {init: 0.0, pub: out};
    var gain_int: J_per_m9 {init: 0.0, pub: out};
  enddef;
  // #STARTGENBELOW
  // ------------imports------------//
  def import using "simple_physiological_modules.cellml" for
    comp heart_module using comp heart;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp ascending_aorta_A_module using comp vv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp ascending_aorta_B_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp ascending_aorta_C_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp ascending_aorta_D_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp aortic_arch_C2_module using comp pv_split_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp aortic_arch_C46_module using comp pv_split_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp aortic_arch_C64_module using comp pv_split_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp brachiocephalic_trunk_C4_module using comp pv_split_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp common_carotid_L48_A_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp common_carotid_R6_A_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp subclavian_L66_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp subclavian_R28_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp head_L_T_module using comp pp_T_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp head_R_T_module using comp pp_T_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp arm_L_T_module using comp pp_T_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp arm_R_T_module using comp pp_T_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp aortic_arch_C94_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp thoracic_aorta_C96_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp thoracic_aorta_C100_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp thoracic_aorta_C104_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp thoracic_aorta_C108_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp thoracic_aorta_C112_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp abdominal_aorta_C114_module using comp pv_split_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp trunk_C_T_module using comp pp_T_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp abdominal_aorta_C136_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp abdominal_aorta_C164_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp abdominal_aorta_C176_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp abdominal_aorta_C188_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp abdominal_aorta_C192_module using comp pv_split_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp common_iliac_L194_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp external_iliac_L198_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp common_iliac_R216_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp external_iliac_R220_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp femoral_L200_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp femoral_R222_module using comp pv_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp leg_L_T_module using comp pp_T_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp leg_R_T_module using comp pp_T_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp venous_lb_module using comp vp_simple_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp venous_ub_module using comp vp_simple_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp venous_ivc_module using comp vp_simple_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp venous_svc_module using comp vp_simple_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp par_module using comp vp_simple_type;
  enddef;
  def import using "simple_physiological_modules.cellml" for
    comp pvn_module using comp vp_simple_type;
  enddef;
  // ------------vessel mappings------------//
  def map between heart_module and ascending_aorta_A_module for
    vars v_aov and v_in;
    vars u_root and u_C;
  enddef;
  def map between heart_module and par_module for
    vars v_puv and v_in;
    vars u_par and u;
  enddef;
  def map between ascending_aorta_A_module and ascending_aorta_B_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_B_module and ascending_aorta_C_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_C_module and ascending_aorta_D_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between ascending_aorta_D_module and aortic_arch_C2_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and aortic_arch_C46_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C2_module and brachiocephalic_trunk_C4_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and aortic_arch_C64_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C46_module and common_carotid_L48_A_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and aortic_arch_C94_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between aortic_arch_C64_module and subclavian_L66_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and common_carotid_R6_A_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_C4_module and subclavian_R28_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_L48_A_module and head_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_carotid_R6_A_module and head_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between subclavian_L66_module and arm_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between subclavian_R28_module and arm_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between head_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between head_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between arm_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between arm_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between aortic_arch_C94_module and thoracic_aorta_C96_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C96_module and thoracic_aorta_C100_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C100_module and thoracic_aorta_C104_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C104_module and thoracic_aorta_C108_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C108_module and thoracic_aorta_C112_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_C112_module and abdominal_aorta_C114_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and abdominal_aorta_C136_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C114_module and trunk_C_T_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between trunk_C_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between abdominal_aorta_C136_module and abdominal_aorta_C164_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C164_module and abdominal_aorta_C176_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C176_module and abdominal_aorta_C188_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C188_module and abdominal_aorta_C192_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_L194_module for
    vars v_out_1 and v;
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_R216_module for
    vars v_out_2 and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_L194_module and external_iliac_L198_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_L198_module and femoral_L200_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between common_iliac_R216_module and external_iliac_R220_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between external_iliac_R220_module and femoral_R222_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_L200_module and leg_L_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between femoral_R222_module and leg_R_T_module for
    vars v_out and v;
    vars u and u_in;
  enddef;
  def map between leg_L_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between leg_R_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between venous_lb_module and venous_ivc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ub_module and venous_svc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ivc_module and heart_module for
    vars v and v_ivc;
    vars u_out and u_ra;
  enddef;
  def map between venous_svc_module and heart_module for
    vars v and v_svc;
    vars u_out and u_ra;
  enddef;
  def map between par_module and pvn_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between pvn_module and heart_module for
    vars v and v_pvn;
    vars u_out and u_la;
  enddef;
  // ------------terminal venous connection------------//
  def map between head_L_T_module and terminal_venous_connection for
    vars v_T and v_head_L_T;
  enddef;
  def map between head_R_T_module and terminal_venous_connection for
    vars v_T and v_head_R_T;
  enddef;
  def map between arm_L_T_module and terminal_venous_connection for
    vars v_T and v_arm_L_T;
  enddef;
  def map between arm_R_T_module and terminal_venous_connection for
    vars v_T and v_arm_R_T;
  enddef;
  def map between trunk_C_T_module and terminal_venous_connection for
    vars v_T and v_trunk_C_T;
  enddef;
  def map between leg_L_T_module and terminal_venous_connection for
    vars v_T and v_leg_L_T;
  enddef;
  def map between leg_R_T_module and terminal_venous_connection for
    vars v_T and v_leg_R_T;
  enddef;
  def map between terminal_venous_connection and venous_lb_module for
    vars v_venous_lb and v_in;
  enddef;
  def map between terminal_venous_connection and venous_ub_module for
    vars v_venous_ub and v_in;
  enddef;

  def comp terminal_venous_connection as
    var v_trunk_C_T: m3_per_s {pub: in};
    var v_leg_L_T: m3_per_s {pub: in};
    var v_leg_R_T: m3_per_s {pub: in};
    var v_venous_lb: m3_per_s {pub: out};
    var v_head_L_T: m3_per_s {pub: in};
    var v_head_R_T: m3_per_s {pub: in};
    var v_arm_L_T: m3_per_s {pub: in};
    var v_arm_R_T: m3_per_s {pub: in};
    var v_venous_ub: m3_per_s {pub: out};
    v_venous_lb = v_trunk_C_T+v_leg_L_T+v_leg_R_T;
    v_venous_ub = v_head_L_T+v_head_R_T+v_arm_L_T+v_arm_R_T;
  enddef;
  // ------------access_variables------------//

  def comp heart as
    var u_ra: J_per_m3 {pub: in};
    var u_rv: J_per_m3 {pub: in};
    var u_la: J_per_m3 {pub: in};
    var u_lv: J_per_m3 {pub: in};
    var q_ra: m3 {pub: in};
    var q_rv: m3 {pub: in};
    var q_la: m3 {pub: in};
    var q_lv: m3 {pub: in};
    var t_ac: dimensionless {pub: in};
    var t_ar: dimensionless {pub: in};
    var T_ac: dimensionless {pub: in};
    var T_ar: dimensionless {pub: in};
    var T_vc: dimensionless {pub: in};
    var T_vr: dimensionless {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var v_trv: m3_per_s {pub: in};
    var v_puv: m3_per_s {pub: in};
    var v_miv: m3_per_s {pub: in};
    var v_aov: m3_per_s {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var l_eff: metre {pub: in};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var A_eff_trv: m2 {pub: in};
    var A_eff_puv: m2 {pub: in};
    var A_eff_miv: m2 {pub: in};
    var A_eff_aov: m2 {pub: in};
  enddef;

  def comp ascending_aorta_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta_B as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta_C as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp ascending_aorta_D as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp aortic_arch_C2 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp aortic_arch_C46 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp aortic_arch_C64 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp brachiocephalic_trunk_C4 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_carotid_L48_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_carotid_R6_A as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp subclavian_L66 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp subclavian_R28 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp head_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var alpha: dimensionless {pub: in};
  enddef;

  def comp head_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var alpha: dimensionless {pub: in};
  enddef;

  def comp arm_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var alpha: dimensionless {pub: in};
  enddef;

  def comp arm_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var alpha: dimensionless {pub: in};
  enddef;

  def comp aortic_arch_C94 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C96 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C100 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C104 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C108 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp thoracic_aorta_C112 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C114 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp trunk_C_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var alpha: dimensionless {pub: in};
  enddef;

  def comp abdominal_aorta_C136 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C164 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C176 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C188 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp abdominal_aorta_C192 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
  enddef;

  def comp common_iliac_L194 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp external_iliac_L198 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp common_iliac_R216 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp external_iliac_R220 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp femoral_L200 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp femoral_R222 as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var E: J_per_m3 {pub: in};
  enddef;

  def comp leg_L_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var alpha: dimensionless {pub: in};
  enddef;

  def comp leg_R_T as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var alpha: dimensionless {pub: in};
  enddef;

  def comp venous_lb as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
  enddef;

  def comp venous_ub as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
  enddef;

  def comp venous_ivc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
  enddef;

  def comp venous_svc as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
  enddef;

  def comp par as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;

  def comp pvn as
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
  enddef;
  // ------------vessel mappings------------//
  def map between heart and heart_module for
    vars u_ra and u_ra;
    vars u_rv and u_rv;
    vars u_la and u_la;
    vars u_lv and u_lv;
    vars q_ra and q_ra;
    vars q_rv and q_rv;
    vars q_la and q_la;
    vars q_lv and q_lv;
    vars t_ac and t_ac;
    vars t_ar and t_ar;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars v_trv and v_trv;
    vars v_puv and v_puv;
    vars v_miv and v_miv;
    vars v_aov and v_aov;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars A_eff_trv and A_eff_trv;
    vars A_eff_puv and A_eff_puv;
    vars A_eff_miv and A_eff_miv;
    vars A_eff_aov and A_eff_aov;
  enddef;
  def map between ascending_aorta_A and ascending_aorta_A_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ascending_aorta_B and ascending_aorta_B_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ascending_aorta_C and ascending_aorta_C_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between ascending_aorta_D and ascending_aorta_D_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between aortic_arch_C2 and aortic_arch_C2_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between aortic_arch_C46 and aortic_arch_C46_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between aortic_arch_C64 and aortic_arch_C64_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between brachiocephalic_trunk_C4 and brachiocephalic_trunk_C4_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_carotid_L48_A and common_carotid_L48_A_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_carotid_R6_A and common_carotid_R6_A_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between subclavian_L66 and subclavian_L66_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between subclavian_R28 and subclavian_R28_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between head_L_T and head_L_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars alpha and alpha;
  enddef;
  def map between head_R_T and head_R_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars alpha and alpha;
  enddef;
  def map between arm_L_T and arm_L_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars alpha and alpha;
  enddef;
  def map between arm_R_T and arm_R_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars alpha and alpha;
  enddef;
  def map between aortic_arch_C94 and aortic_arch_C94_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C96 and thoracic_aorta_C96_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C100 and thoracic_aorta_C100_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C104 and thoracic_aorta_C104_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C108 and thoracic_aorta_C108_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between thoracic_aorta_C112 and thoracic_aorta_C112_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C114 and abdominal_aorta_C114_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between trunk_C_T and trunk_C_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars alpha and alpha;
  enddef;
  def map between abdominal_aorta_C136 and abdominal_aorta_C136_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C164 and abdominal_aorta_C164_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C176 and abdominal_aorta_C176_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C188 and abdominal_aorta_C188_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between abdominal_aorta_C192 and abdominal_aorta_C192_module for
    vars u and u;
    vars v and v;
  enddef;
  def map between common_iliac_L194 and common_iliac_L194_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between external_iliac_L198 and external_iliac_L198_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between common_iliac_R216 and common_iliac_R216_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between external_iliac_R220 and external_iliac_R220_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between femoral_L200 and femoral_L200_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between femoral_R222 and femoral_R222_module for
    vars u and u;
    vars v and v;
    vars E and E;
  enddef;
  def map between leg_L_T and leg_L_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars alpha and alpha;
  enddef;
  def map between leg_R_T and leg_R_T_module for
    vars u and u;
    vars v and v;
    vars v_T and v_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars alpha and alpha;
  enddef;
  def map between venous_lb and venous_lb_module for
    vars u and u;
    vars v and v;
    vars C and C;
    vars R and R;
  enddef;
  def map between venous_ub and venous_ub_module for
    vars u and u;
    vars v and v;
    vars C and C;
    vars R and R;
  enddef;
  def map between venous_ivc and venous_ivc_module for
    vars u and u;
    vars v and v;
    vars C and C;
    vars R and R;
  enddef;
  def map between venous_svc and venous_svc_module for
    vars u and u;
    vars v and v;
    vars C and C;
    vars R and R;
  enddef;
  def map between par and par_module for
    vars u and u;
    vars v and v;
    vars C and C;
    vars R and R;
    vars I and I;
  enddef;
  def map between pvn and pvn_module for
    vars u and u;
    vars v and v;
    vars C and C;
    vars R and R;
    vars I and I;
  enddef;
  // ------------parameters mapping to modules------------//
  def map between parameters_heart and heart_module for
    vars rho and rho;
    vars T and T;
    vars t_ac and t_ac;
    vars t_ar and t_ar;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars q_ra_0 and q_ra_0;
    vars q_rv_0 and q_rv_0;
    vars q_la_0 and q_la_0;
    vars q_lv_0 and q_lv_0;
  enddef;
  def map between environment and ascending_aorta_A_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and ascending_aorta_A_module for
    vars l_ascending_aorta_A and l;
    vars E_ascending_aorta_A and E;
    vars r_ascending_aorta_A and r;
    vars theta_ascending_aorta_A and theta;
  enddef;
  def map between environment and ascending_aorta_B_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and ascending_aorta_B_module for
    vars l_ascending_aorta_B and l;
    vars E_ascending_aorta_B and E;
    vars r_ascending_aorta_B and r;
    vars theta_ascending_aorta_B and theta;
  enddef;
  def map between environment and ascending_aorta_C_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and ascending_aorta_C_module for
    vars l_ascending_aorta_C and l;
    vars E_ascending_aorta_C and E;
    vars r_ascending_aorta_C and r;
    vars theta_ascending_aorta_C and theta;
  enddef;
  def map between environment and ascending_aorta_D_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and ascending_aorta_D_module for
    vars l_ascending_aorta_D and l;
    vars E_ascending_aorta_D and E;
    vars r_ascending_aorta_D and r;
    vars theta_ascending_aorta_D and theta;
  enddef;
  def map between environment and aortic_arch_C2_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and aortic_arch_C2_module for
    vars l_aortic_arch_C2 and l;
    vars E_aortic_arch_C2 and E;
    vars r_aortic_arch_C2 and r;
    vars theta_aortic_arch_C2 and theta;
  enddef;
  def map between environment and aortic_arch_C46_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and aortic_arch_C46_module for
    vars l_aortic_arch_C46 and l;
    vars E_aortic_arch_C46 and E;
    vars r_aortic_arch_C46 and r;
    vars theta_aortic_arch_C46 and theta;
  enddef;
  def map between environment and aortic_arch_C64_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and aortic_arch_C64_module for
    vars l_aortic_arch_C64 and l;
    vars E_aortic_arch_C64 and E;
    vars r_aortic_arch_C64 and r;
    vars theta_aortic_arch_C64 and theta;
  enddef;
  def map between environment and brachiocephalic_trunk_C4_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and brachiocephalic_trunk_C4_module for
    vars l_brachiocephalic_trunk_C4 and l;
    vars E_brachiocephalic_trunk_C4 and E;
    vars r_brachiocephalic_trunk_C4 and r;
    vars theta_brachiocephalic_trunk_C4 and theta;
  enddef;
  def map between environment and common_carotid_L48_A_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and common_carotid_L48_A_module for
    vars l_common_carotid_L48_A and l;
    vars E_common_carotid_L48_A and E;
    vars r_common_carotid_L48_A and r;
    vars theta_common_carotid_L48_A and theta;
  enddef;
  def map between environment and common_carotid_R6_A_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and common_carotid_R6_A_module for
    vars l_common_carotid_R6_A and l;
    vars E_common_carotid_R6_A and E;
    vars r_common_carotid_R6_A and r;
    vars theta_common_carotid_R6_A and theta;
  enddef;
  def map between environment and subclavian_L66_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and subclavian_L66_module for
    vars l_subclavian_L66 and l;
    vars E_subclavian_L66 and E;
    vars r_subclavian_L66 and r;
    vars theta_subclavian_L66 and theta;
  enddef;
  def map between environment and subclavian_R28_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and subclavian_R28_module for
    vars l_subclavian_R28 and l;
    vars E_subclavian_R28 and E;
    vars r_subclavian_R28 and r;
    vars theta_subclavian_R28 and theta;
  enddef;
  def map between environment and head_L_T_module for
    vars gain_int and gain_int;
  enddef;
  def map between parameters and head_L_T_module for
    vars R_T_head_L and R_T;
    vars C_T_head_L and C_T;
    vars alpha_head_L and alpha;
    vars v_nom_head_L and v_nominal;
  enddef;
  def map between environment and head_R_T_module for
    vars gain_int and gain_int;
  enddef;
  def map between parameters and head_R_T_module for
    vars R_T_head_R and R_T;
    vars C_T_head_R and C_T;
    vars alpha_head_R and alpha;
    vars v_nom_head_R and v_nominal;
  enddef;
  def map between environment and arm_L_T_module for
    vars gain_int and gain_int;
  enddef;
  def map between parameters and arm_L_T_module for
    vars R_T_arm_L and R_T;
    vars C_T_arm_L and C_T;
    vars alpha_arm_L and alpha;
    vars v_nom_arm_L and v_nominal;
  enddef;
  def map between environment and arm_R_T_module for
    vars gain_int and gain_int;
  enddef;
  def map between parameters and arm_R_T_module for
    vars R_T_arm_R and R_T;
    vars C_T_arm_R and C_T;
    vars alpha_arm_R and alpha;
    vars v_nom_arm_R and v_nominal;
  enddef;
  def map between environment and aortic_arch_C94_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and aortic_arch_C94_module for
    vars l_aortic_arch_C94 and l;
    vars E_aortic_arch_C94 and E;
    vars r_aortic_arch_C94 and r;
    vars theta_aortic_arch_C94 and theta;
  enddef;
  def map between environment and thoracic_aorta_C96_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and thoracic_aorta_C96_module for
    vars l_thoracic_aorta_C96 and l;
    vars E_thoracic_aorta_C96 and E;
    vars r_thoracic_aorta_C96 and r;
    vars theta_thoracic_aorta_C96 and theta;
  enddef;
  def map between environment and thoracic_aorta_C100_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and thoracic_aorta_C100_module for
    vars l_thoracic_aorta_C100 and l;
    vars E_thoracic_aorta_C100 and E;
    vars r_thoracic_aorta_C100 and r;
    vars theta_thoracic_aorta_C100 and theta;
  enddef;
  def map between environment and thoracic_aorta_C104_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and thoracic_aorta_C104_module for
    vars l_thoracic_aorta_C104 and l;
    vars E_thoracic_aorta_C104 and E;
    vars r_thoracic_aorta_C104 and r;
    vars theta_thoracic_aorta_C104 and theta;
  enddef;
  def map between environment and thoracic_aorta_C108_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and thoracic_aorta_C108_module for
    vars l_thoracic_aorta_C108 and l;
    vars E_thoracic_aorta_C108 and E;
    vars r_thoracic_aorta_C108 and r;
    vars theta_thoracic_aorta_C108 and theta;
  enddef;
  def map between environment and thoracic_aorta_C112_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and thoracic_aorta_C112_module for
    vars l_thoracic_aorta_C112 and l;
    vars E_thoracic_aorta_C112 and E;
    vars r_thoracic_aorta_C112 and r;
    vars theta_thoracic_aorta_C112 and theta;
  enddef;
  def map between environment and abdominal_aorta_C114_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and abdominal_aorta_C114_module for
    vars l_abdominal_aorta_C114 and l;
    vars E_abdominal_aorta_C114 and E;
    vars r_abdominal_aorta_C114 and r;
    vars theta_abdominal_aorta_C114 and theta;
  enddef;
  def map between environment and trunk_C_T_module for
    vars gain_int and gain_int;
  enddef;
  def map between parameters and trunk_C_T_module for
    vars R_T_trunk_C and R_T;
    vars C_T_trunk_C and C_T;
    vars alpha_trunk_C and alpha;
    vars v_nom_trunk_C and v_nominal;
  enddef;
  def map between environment and abdominal_aorta_C136_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and abdominal_aorta_C136_module for
    vars l_abdominal_aorta_C136 and l;
    vars E_abdominal_aorta_C136 and E;
    vars r_abdominal_aorta_C136 and r;
    vars theta_abdominal_aorta_C136 and theta;
  enddef;
  def map between environment and abdominal_aorta_C164_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and abdominal_aorta_C164_module for
    vars l_abdominal_aorta_C164 and l;
    vars E_abdominal_aorta_C164 and E;
    vars r_abdominal_aorta_C164 and r;
    vars theta_abdominal_aorta_C164 and theta;
  enddef;
  def map between environment and abdominal_aorta_C176_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and abdominal_aorta_C176_module for
    vars l_abdominal_aorta_C176 and l;
    vars E_abdominal_aorta_C176 and E;
    vars r_abdominal_aorta_C176 and r;
    vars theta_abdominal_aorta_C176 and theta;
  enddef;
  def map between environment and abdominal_aorta_C188_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and abdominal_aorta_C188_module for
    vars l_abdominal_aorta_C188 and l;
    vars E_abdominal_aorta_C188 and E;
    vars r_abdominal_aorta_C188 and r;
    vars theta_abdominal_aorta_C188 and theta;
  enddef;
  def map between environment and abdominal_aorta_C192_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and abdominal_aorta_C192_module for
    vars l_abdominal_aorta_C192 and l;
    vars E_abdominal_aorta_C192 and E;
    vars r_abdominal_aorta_C192 and r;
    vars theta_abdominal_aorta_C192 and theta;
  enddef;
  def map between environment and common_iliac_L194_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and common_iliac_L194_module for
    vars l_common_iliac_L194 and l;
    vars E_common_iliac_L194 and E;
    vars r_common_iliac_L194 and r;
    vars theta_common_iliac_L194 and theta;
  enddef;
  def map between environment and external_iliac_L198_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and external_iliac_L198_module for
    vars l_external_iliac_L198 and l;
    vars E_external_iliac_L198 and E;
    vars r_external_iliac_L198 and r;
    vars theta_external_iliac_L198 and theta;
  enddef;
  def map between environment and common_iliac_R216_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and common_iliac_R216_module for
    vars l_common_iliac_R216 and l;
    vars E_common_iliac_R216 and E;
    vars r_common_iliac_R216 and r;
    vars theta_common_iliac_R216 and theta;
  enddef;
  def map between environment and external_iliac_R220_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and external_iliac_R220_module for
    vars l_external_iliac_R220 and l;
    vars E_external_iliac_R220 and E;
    vars r_external_iliac_R220 and r;
    vars theta_external_iliac_R220 and theta;
  enddef;
  def map between environment and femoral_L200_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and femoral_L200_module for
    vars l_femoral_L200 and l;
    vars E_femoral_L200 and E;
    vars r_femoral_L200 and r;
    vars theta_femoral_L200 and theta;
  enddef;
  def map between environment and femoral_R222_module for
    vars beta_g and beta_g;
  enddef;
  def map between parameters and femoral_R222_module for
    vars l_femoral_R222 and l;
    vars E_femoral_R222 and E;
    vars r_femoral_R222 and r;
    vars theta_femoral_R222 and theta;
  enddef;
  def map between environment and leg_L_T_module for
    vars gain_int and gain_int;
  enddef;
  def map between parameters and leg_L_T_module for
    vars R_T_leg_L and R_T;
    vars C_T_leg_L and C_T;
    vars alpha_leg_L and alpha;
    vars v_nom_leg_L and v_nominal;
  enddef;
  def map between environment and leg_R_T_module for
    vars gain_int and gain_int;
  enddef;
  def map between parameters and leg_R_T_module for
    vars R_T_leg_R and R_T;
    vars C_T_leg_R and C_T;
    vars alpha_leg_R and alpha;
    vars v_nom_leg_R and v_nominal;
  enddef;
  def map between parameters and venous_lb_module for
    vars R_venous_lb and R;
    vars C_venous_lb and C;
    vars I_venous_lb and I;
  enddef;
  def map between parameters and venous_ub_module for
    vars R_venous_ub and R;
    vars C_venous_ub and C;
    vars I_venous_ub and I;
  enddef;
  def map between parameters and venous_ivc_module for
    vars R_venous_ivc and R;
    vars C_venous_ivc and C;
    vars I_venous_ivc and I;
  enddef;
  def map between parameters and venous_svc_module for
    vars R_venous_svc and R;
    vars C_venous_svc and C;
    vars I_venous_svc and I;
  enddef;
  def map between parameters and par_module for
    vars R_par and R;
    vars C_par and C;
    vars I_par and I;
  enddef;
  def map between parameters and pvn_module for
    vars R_pvn and R;
    vars C_pvn and C;
    vars I_pvn and I;
  enddef;
  // ------------time mapping------------//
  def map between environment and heart_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_A_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_B_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_C_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_D_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C2_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C46_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C64_module for
    vars time and t;
  enddef;
  def map between environment and brachiocephalic_trunk_C4_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_A_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L66_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R28_module for
    vars time and t;
  enddef;
  def map between environment and head_L_T_module for
    vars time and t;
  enddef;
  def map between environment and head_R_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_L_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_R_T_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C94_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C96_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C100_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C104_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C108_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C112_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C114_module for
    vars time and t;
  enddef;
  def map between environment and trunk_C_T_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C136_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C164_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C176_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C188_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C192_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_L194_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_L198_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_R216_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_R220_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L200_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R222_module for
    vars time and t;
  enddef;
  def map between environment and leg_L_T_module for
    vars time and t;
  enddef;
  def map between environment and leg_R_T_module for
    vars time and t;
  enddef;
  def map between environment and venous_lb_module for
    vars time and t;
  enddef;
  def map between environment and venous_ub_module for
    vars time and t;
  enddef;
  def map between environment and venous_ivc_module for
    vars time and t;
  enddef;
  def map between environment and venous_svc_module for
    vars time and t;
  enddef;
  def map between environment and par_module for
    vars time and t;
  enddef;
  def map between environment and pvn_module for
    vars time and t;
  enddef;
enddef;
